<xml version="1.0">
  <bioml>
    <note />
    <note label="scoring, a ions" type="input">yes</note>
    <note label="scoring, b ions" type="input">yes</note>
    <note label="scoring, c ions" type="input">no</note>
    <note label="protein, cleavage site" type="input">[X]|[X]</note>
    <note label="spectrum, fragment mass type" type="input">monoisotopic</note>
    <note label="spectrum, fragment monoisotopic mass error" type="input">0.4</note>
    <note label="spectrum, fragment monoisotopic mass error units" type="input">Daltons</note>
    <note label="spectrum, parent monoisotopic mass isotope error" type="input">yes</note>
    <note label="spectrum, maximum parent charge" type="input">4</note>
    <note label="refine, maximum valid expectation value" type="input">0.1</note>
    <note label="scoring, maximum missed cleavage sites" type="input">2</note>
    <note label="spectrum, minimum fragment mz" type="input">150.0</note>
    <note label="spectrum, minimum parent m+h" type="input">400.0</note>
    <note label="spectrum, minimum peaks" type="input">15</note>
    <note label="spectrum, use noise suppression" type="input">no</note>
    <note label="output, results" type="input">valid</note>
    <note label="spectrum, parent monoisotopic mass error minus" type="input">200.0</note>
    <note label="spectrum, parent monoisotopic mass error plus" type="input">200.0</note>
    <note label="spectrum, parent monoisotopic mass error units" type="input">ppm</note>
    <note label="refine, point mutations" type="input">no</note>
    <note label="protein, cleavage C-terminal mass change" type="input">17.002735</note>
    <note label="protein, cleavage N-terminal mass change" type="input">1.007825</note>
    <note label="refine" type="input">yes</note>
    <note label="refine, potential modification mass" type="input">15.994915@M,15.994915@W,0.9848@N,0.9848@Q</note>
    <note label="refine, potential N-terminus modifications" type="input">+42.010565@[</note>
    <note label="refine, unanticipated cleavage" type="input">yes</note>
    <note label="residue, potential modification mass" type="input">15.994915@M</note>
    <note label="spectrum, path" type="input">C:\BUGS\tornado\test_spectra\chicken\gt1.tmp</note>
    <note label="refine, spectrum synthesis" type="input">yes</note>
    <note label="protein, taxon" type="input">chicken</note>
    <note label="list path, taxonomy information" type="input">C:\BUGS\tornado\thegpm\tandem\taxonomy.xml</note>
    <note label="spectrum, threads" type="input">1</note>
    <note label="spectrum, total peaks" type="input">50</note>
    <note label="refine, use potential modifications for full refinement" type="input">no</note>
    <note label="scoring, x ions" type="input">no</note>
    <note label="scoring, y ions" type="input">yes</note>
    <note label="scoring, z ions" type="input">no</note>
  </bioml>
</xml>
